PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  color = $[0.004,0.004,0.004]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [400,400]
  Full-screen window = False
  expName = first text stimuli
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      text = hello
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_2
      text = World!
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 2.0
      letterHeight = 0.1
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Flow
  Routine trial
