PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  color = $[1.000,1.000,1.000]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [400, 400]
  Full-screen window = False
  expName = p2_monitor_image
  Screen = 1
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Routines
  Routine trial
    ImageComponent image
      stopVal [duration (s)] = 2
      units = pix
      startVal [time (s)] = 0.0
      image = media/hello.png
      size = (200,200)
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    ImageComponent image_2
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 2.0
      image = media/world.png
      size = (200, 200)
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Flow
  Routine trial
