PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  color = $[1.000,1.000,1.000]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [800,800]
  Full-screen window = False
  expName = p4_extrawork
  Screen = 1
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Routines
  Routine trial
    SoundComponent sound_1
      sound = media/world.wav
      stopVal [duration (s)] = 1.0
      durationEstim = 1.0
      startVal [time (s)] = 1.0
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    SoundComponent sound_2
      sound = media/hello.wav
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
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    TextComponent text
      color = $[-1.000,-1.000,-1.000]
      text = Hello
      stopVal [duration (s)] = 1.0
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = media/hello.png
      size = (0.5, 0.5)
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    TextComponent text_2
      color = $[-1.000,-1.000,-1.000]
      text = World
      stopVal [duration (s)] = 1.0
      pos = (0, 0.5)
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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    ImageComponent image_2
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.0
      image = media/world.png
      size = (0.5, 0.5)
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Flow
  Routine trial
