PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = p1_loop_texts
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      color = black
      text [set every repeat] = $texts
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = temp_psych\conditions.pkl
    loopType = sequential
    nReps = 1
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    conditions:
      [{'texts': u'Text1'},
      {'texts': u'Text2'},
      {'texts': u'Text3'},
      {'texts': u'Text4'}]
    Routine trial
  LoopTerminator trials
