PsychoPy2experiment version="1.90.3"
Settings
  expName = untitledWORLD
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Window size (pixels) = (1024, 768)
  Screen = 1
  Monitor = testMonitor
  Units = use prefs
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Routines
  Routine trial
    ImageComponent image
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      opacity [set every repeat] = $level
      size = (0.5, 0.5)
      image = Day_2_psycho_files_media_world.png
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    KeyboardComponent key_resp_2
      startVal [time (s)] = 0.5
      allowedKeys = 'up','down'
      forceEndRoutine = True
      storeCorrect = True
      correctAns = up
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Flow
  LoopInitiator trials loopType="StairHandler"
    nReps = 10
    start value = 0.1
    max value = 1
    min value = 0
    step sizes = [0.2]
    step type = lin
    N up = 3
    N down = 1
    N reversals = 0
    loopType = staircase
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    Routine trial
  LoopTerminator trials
