PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  expName = rst_2
  Screen = 1
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Routines
  Routine trial
    CodeComponent code
      Begin Experiment:
        import random
        index=0
        sent_ok=0
        count_sent=0
        order=random.sample(range(2,7),5)
        recall=False
        end_order=0
        time_band=False
      Begin Routine:
        if sent_ok==order[index]:
            recall=True
            index+=1
            sent_ok=0
            end_order+=1
            continueRoutine = False
        elif sent_ok!=order[index] or time_band==True:
            sent_ok+=1
            print("ok1")
            time_band=False


        if end_order==5:
            order=random.sample(range(2,7),5)
            recall=False
            index=0
            end_order=0

        print(sent_ok, index,order[index])
      Each Frame:
        if text.status==FINISHED:
            time_band=True
            continueRoutine = False
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text
      color = black
      text [set every repeat] = $Sentences + str(order[index])
      stopVal [duration (s)] = 7
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Instructions:


        The Reading span Test (RTS) is a Working Memory task where you need to read a serie of sentences aloud and try to recall the last word of each;

        The phrases will randomically appear and you have up to 7 seconds to read. To continue you can press the space key.
        In the recall you can press any key and the time is free.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine recall
    TextComponent text_2
      text = recall
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Begin Routine:
        if key_resp_3.status == STARTED:
            theseKeys = event.getKeys()

        print(recall)
        if recall==False:
            continueRoutine = False
      Each Frame:
        if len(theseKeys)>0:
            continueRoutine=False
            recall=False
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sentences.xlsx
    loopType = sequential
    nReps = 5
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    conditions:
      [OrderedDict([('Sentences', u'Ele chegou muito calmo no lugar onde teria o encontro com os pais.')]),
      OrderedDict([('Sentences', u'Voc\xea tem que agradecer \xe0 sua tia por esse lindo colar que ganhou.')]),
      OrderedDict([('Sentences', u'A parada de \xf4nibus dessa rua \xe9 muito bem localizada.')]),
      OrderedDict([('Sentences', u'Ontem bebi demais no bar da frente e hoje n\xe3o consigo nem pensar.')]),
      OrderedDict([('Sentences', u'Calem a boca daquele pobre diabo que n\xe3o para de gritar.')]),
      OrderedDict([('Sentences', u'Vamos ver o novo filme daquele diretor que est\xe1 em cartaz no cinema?')]),
      OrderedDict([('Sentences', u'O Brasil \xe9 o pa\xeds com o maior n\xfamero de medalhas de ouro.')]),
      OrderedDict([('Sentences', u'Fa\xe7o tudo o que posso para melhorar a cada dia como pessoa.')]),
      OrderedDict([('Sentences', u'O papel \xe9 feito de \xe1rvores que s\xe3o plantadas para esse fim.')]),
      OrderedDict([('Sentences', u'Eu n\xe3o gosto de quem conta mentiras e de quem trai os amigos.')]),
      OrderedDict([('Sentences', u'Dispunham apenas de cones e vassouras para isolar o local.')]),
      OrderedDict([('Sentences', u'Depois de passar por um acidente, ele n\xe3o pode formar novas mem\xf3rias.')]),
      OrderedDict([('Sentences', u'O concreto armado \xe9 uma t\xe9cnica de constru\xe7\xe3o muito dif\xedcil.')]),
      OrderedDict([('Sentences', u'Quem n\xe3o tem animais pra cuidar n\xe3o sabe como isso pode ser chato.')]),
      OrderedDict([('Sentences', u'No Campus do Vale h\xe1 v\xe1rias salas de aula, e tamb\xe9m um teatro.')])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
    Routine trial
    Routine recall
  LoopTerminator trials
